CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Frame "0")
    Name to assign these images:Dapi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "1")
    Name to assign these images:IBA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Frame "2")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:Iba1
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:10
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
GaussianFilter:[module_num:6|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
    Select the input image:Iba1
    Name the output image:GaussianFilter_Iba1
    Sigma:1

Threshold:[module_num:7|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
    Select the input image:GaussianFilter_Iba1
    Name the output image:Threshold_IBA
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0.8
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Iba1_nuc
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Iba1_nuc
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:Iba1_nuc
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Iba1_nuc
    Name the objects to be identified:Microglia
    Select the method to identify the secondary objects:Propagation
    Select the input image:Threshold_IBA
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    Regularization factor:1
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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    Size of adaptive window:10
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:Microglia
    Name the output image:Cells
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:13|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
    Select the input image:Cells
    Name the output image:MorphologicalSkeleton

MeasureObjectSkeleton:[module_num:14|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
    Select the seed objects:Iba1_nuc
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:Yes
    Intensity image:Cells
    File output directory:Elsewhere...|J:\\Ellen\\adult_mg_morphology_analysis\\analyzed_images\\output2
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Microglia
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BranchpointImage
    Name the output image:BranchOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Microglia
    Select outline color:Green
    Select objects to display:Iba1_nuc

SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:BranchOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Iba1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:BranchPoint
    Saved file format:tiff
    Output file location:Elsewhere...|J:\\Ellen\\adult_mg_morphology_analysis\\analyzed_images\\output2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|J:\\Ellen\\adult_mg_morphology_analysis\\data_files\\output2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Iba1_nuc|AreaShape_SpatialMoment_1_0,Iba1_nuc|AreaShape_SpatialMoment_1_3,Iba1_nuc|AreaShape_SpatialMoment_1_1,Iba1_nuc|AreaShape_SpatialMoment_1_2,Iba1_nuc|AreaShape_SpatialMoment_2_3,Iba1_nuc|AreaShape_SpatialMoment_2_2,Iba1_nuc|AreaShape_SpatialMoment_2_0,Iba1_nuc|AreaShape_SpatialMoment_2_1,Iba1_nuc|AreaShape_SpatialMoment_0_3,Iba1_nuc|AreaShape_SpatialMoment_0_0,Iba1_nuc|AreaShape_SpatialMoment_0_1,Iba1_nuc|AreaShape_SpatialMoment_0_2,Iba1_nuc|AreaShape_CentralMoment_1_3,Iba1_nuc|AreaShape_CentralMoment_1_2,Iba1_nuc|AreaShape_CentralMoment_1_0,Iba1_nuc|AreaShape_CentralMoment_1_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:KOMD_MyExpt_All_updated
    Overwrite existing files without warning?:Yes
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
OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Iba1
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Iba1_nuc
    Select outline color:Green
    Select objects to display:Microglia

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Iba1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Overlay
    Saved file format:tiff
    Output file location:Elsewhere...|J:\\Ellen\\adult_mg_morphology_analysis\\analyzed_images\\output2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
