CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:AF488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:AF647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Increasing brightness of PV image']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
    Select the input image:AF488
    Name the output image:Rescaled_PV
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:6|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notes:['Reducing heterogenity of WFA image']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
    Select the input image:AF647
    Name the output image:WFA_Gaussian_Filtered
    Sigma:1

GaussianFilter:[module_num:7|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notes:['Reducing heterogenity of PV image']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
    Select the input image:Rescaled_PV
    Name the output image:PV_Gaussian_Filtered
    Sigma:1

MeasureImageIntensity:[module_num:8|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notes:['Determining certain percentile brightnesses for both WFA and PV']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
    Select images to measure:PV_Gaussian_Filtered, WFA_Gaussian_Filtered
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,95

ImageMath:[module_num:9|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notes:['Reducing WFA noise (subtracting percentile brightness)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:WFA_reduced_noise
    Image or measurement?:Image
    Select the first image:WFA_Gaussian_Filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:AF488
    Multiply the second image by:1.0
    Measurement:Intensity_LowerQuartileIntensity_WFA_Gaussian_Filtered

ImageMath:[module_num:10|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notes:['Reducing PV noise (subtracting percentile brightness)']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PV_reduced_noise
    Image or measurement?:Image
    Select the first image:PV_Gaussian_Filtered
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:AF488
    Multiply the second image by:1.0
    Measurement:Intensity_LowerQuartileIntensity_PV_Gaussian_Filtered

IdentifyPrimaryObjects:[module_num:11|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notes:['Identifying WFA ROIs']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
    Select the input image:WFA_reduced_noise
    Name the primary objects to be identified:WFA
    Typical diameter of objects, in pixel units (Min,Max):40,270
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:160
    Lower outlier fraction:0.8
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

EditObjectsManually:[module_num:12|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
    Select the objects to be edited:WFA
    Name the edited objects:Edited_WFA_ROIs
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:WFA_reduced_noise
    Allow overlapping objects?:No

IdentifyPrimaryObjects:[module_num:13|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notes:['Identifying PV ROIs']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
    Select the input image:PV_reduced_noise
    Name the primary objects to be identified:PV_cells
    Typical diameter of objects, in pixel units (Min,Max):28,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.2
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:1
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
EditObjectsManually:[module_num:14|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
    Select the objects to be edited:PV_cells
    Name the edited objects:Edited_PV_cells
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:PV_reduced_noise
    Allow overlapping objects?:No

RelateObjects:[module_num:15|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notes:['Developing relationship between WFA and PV ROIs to do WFA_PV_only']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
    Parent objects:Edited_PV_cells
    Child objects:Edited_WFA_ROIs
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:16|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notes:['Filtering out WFA ROIs that are not PV positive']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
    Select the objects to filter:Edited_WFA_ROIs
    Name the output objects:WFA_PV_only
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Parent_Edited_PV_cells
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:17|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notes:['Measuring WFA intensity']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
    Select images to measure:AF647
    Select objects to measure:Edited_WFA_ROIs

MeasureObjectIntensity:[module_num:18|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notes:['Measuring PV intensity']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
    Select images to measure:AF488
    Select objects to measure:Edited_PV_cells

MeasureObjectIntensity:[module_num:19|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notes:['Measuring WFA_PV_only intensity']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
    Select images to measure:AF647
    Select objects to measure:WFA_PV_only

ExportToSpreadsheet:[module_num:20|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notes:['Exporting measurements to excel sheet']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|J:\\Laura\\Juvenile WFA\\WITH TDT REDO\\analysis\\cellprofilerinput\\Q2\\output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cp-175-1-6
    Overwrite existing files without warning?:No
    Data to export:Edited_WFA_ROIs
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Edited_PV_cells
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:WFA_PV_only
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes

OverlayOutlines:[module_num:21|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notes:["Overlaying WFA ROI's for saving images"]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
    Display outlines on a blank image?:No
    Select image on which to display outlines:WFA_reduced_noise
    Name the output image:WFA_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:blue
    Select objects to display:Edited_WFA_ROIs

OverlayOutlines:[module_num:22|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notes:["Overlaying PV ROI's for saving images"]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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PV_reduced_noise
    Name the output image:PV_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:Edited_PV_cells

SaveImages:[module_num:23|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notes:['Saving WFA image with ROIs']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
    Select the type of image to save:Image
    Select the image to save:WFA_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_WFA_ROIs
    Saved file format:tiff
    Output file location:Same folder as image|overlays w ROIs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:24|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notes:['Saving PV image with ROIs']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
    Select the type of image to save:Image
    Select the image to save:PV_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:AF488
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_PV_ROIs
    Saved file format:tiff
    Output file location:Same folder as image|overlays w ROIs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:25|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:CP_Database_test
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:Edited_PV_cells,Edited_WFA_ROIs,WFA_PV_only
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:AF488,AF647,DAPI
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Adult_No_MD_test
    Which objects should be used for locations?:Edited_WFA_ROIs
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:WFA
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
DisplayDataOnImage:[module_num:26|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notes:['We’ll choose a threshold for the intensity that determines if a cell is mitotic or not. The MaxIntensity is an effective measurement, since the probe itself is so specific.', '', 'N/A']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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MaxIntensity_OrigGreen
    Select the image on which to display the measurements:OrigGreenOverlay
    Text color:magenta
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

ClassifyObjects:[module_num:27|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notes:['From the data displayed image, the value of 0.2 was chosen as an appropriate threshold for determining PH3+ cells. This approach contrasts with the colocalization method to classify cells that was done by the RelateObjects module. The 0.2 threshold parallels the threshold automatically chosen by the IdentifyPrimaryObjects module on the PH3 image.', '', 'N/A']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enabled:False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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MaxIntensity_OrigGreen
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.2
    Give each bin a name?:Yes
    Enter the bin names separated by commas:PH3Neg,PH3Pos
    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Default Output Folder|None
    Rules or classifier file name:None
    Allow fuzzy feature matching?:No

RescaleIntensity:[module_num:28|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enabled:False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
    Select the input image:WFA_reduced_noise
    Name the output image:Rescaled_WFA
    Rescaling method:Stretch each image to use the full intensity range
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